PsychoPy2experiment version="2026.1.0"
Settings
  runMode = 1
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    PolygonComponent Fixation
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      fillColor = white
      size = 10,10
      units = pix
      shape = circle
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    PolygonComponent target
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      fillColor = white
      size = 100,100
      units = pix
      shape = rectangle
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    KeyboardComponent key_resp
      startVal [time (s)] = 0.5
      forceEndRoutine = True
      allowedKeys = 'y'
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  Routine instruction
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    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Your task is to press Y when you see a square.
        Press space when you are ready to start.
    KeyboardComponent key_resp1
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
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  Routine Thank
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    TextComponent text1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2.0
      text = Thank You
      letterHeight = 0.05
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
    conditions = []
    endPoints = [0,1]
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    Routine trial
  LoopTerminator trials
  Routine Thank
